' $Id$

' Notes:
' Calling DataParametersDialog%() once will generate registry keys Reclab/Data. 
' The first time there is no data set name - hit the "New Data Set" key to generate it. 
' The new name is NOT shown in the dialog - trust that it is there. 
' Hitting Save will store the values inside the new key. 



' File system reference vars. Each var is a directory path, WITHOUT the trailing slash. 
var bin$, script$;
script$ := View(App(3)).FileName$(1) + View(App(3)).FileName$(2);	' folder containing this script
bin$ := View(App(3)).FileName$(1) + View(App(3)).FileName$(2) + "..\\bin";	' Location of executables is ..\bin, relative to script dir


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Get Current configuration START
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

func GetCurrentConfiguration$()
	var key$;
	var s$;
	key$:="Reclab";
	Profile(key$, "CurrentConfiguration", "default", s$);
	return s$;
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Get Current configuration END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Data parameters START
'
'	Vars that control where data is stored. 
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

var dataPathRoot$;		' base path for data storage
var dataDataSet$;		' folder under data path where data files placed
var dataCellName$;		' part of base name for all data files
var dataDataSetTextItem%;	' 

' This must be called once to ensure that keys exist where we expect them. 
' The best way is to call this from within GetDataParameters....
proc InitDataParameters()
    var key$;
	Profile(key$, "PathRoot", "C:\\data", dataPathRoot$);
	Profile(key$, "DataSet", "", dataDataSet$);
	Profile(key$, "CellName", "", dataCellName$);
end;
    


proc GetDataParameters()
	var stmp$;
	var key$;

    InitDataParameters();

	key$:="Reclab\\Data";

	Profile(key$, "PathRoot", "C:\\data", dataPathRoot$);
	Profile(key$, "DataSet", "", dataDataSet$);
	Profile(key$, "CellName", "", dataCellName$);
	return;
end;

proc SaveDataParameters()
	var stmp$;
	var key$;

	key$:="Reclab\\Data";

	Profile(key$, "PathRoot", dataPathRoot$);
	Profile(key$, "DataSet", dataDataSet$);
	Profile(key$, "CellName", dataCellName$);
	return;
end;

func DataParametersDialog%()
	var i%;
	GetDataParameters();
	DlgCreate("Data Storage Parameters", 25, 10, 50);
	DlgText("Data root path: " + dataPathRoot$, 0, 1);
	dataDataSetTextItem% := DlgText("Data set name: " + dataDataSet$, 0, 2);
	DlgString(1, "Cell name:", 10, "", 0, 3);
        DlgButton(2, "New Data Set", NewDataSet%);
	i% := DlgShow(dataCellName$);
	if (i% = 1) then
		if Len(dataDataSet$) = 0 then
			Message("Must specify a data set (try the button!)");
		else
			if Len(dataCellName$) = 0 then
				Message("Must specify a cell name");
			else
				FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3, 1);
				SaveDataParameters();
			endif;
		endif;
	endif;
	return i%;
end;


func NewDataSet%()
	var d$;
	var i%;
	var dirs$[100];	' if there are ever more than 100 datasets in a single day there will be trouble
	d$ := Date$(2, 2, 3, 3, "-");
	PrintLog("NewDataSet: date string = " + d$ + "\n");

	' Change current dir to data path root, then get list of subdirs with this date string
	PrintLog("NewDataSet: dataPathRoot$=" + dataPathRoot$ + "\n");
	FilePathSet(dataPathRoot$, 0, 1);
	i% := FileList(dirs$, -2, d$ + "-??");
        PrintLog("NewDataSet: found " + str$(i%) + " dirs\n");

	' form new dataset name. The first will have "-01" appended, the second "-02", etc. 
	dataDataSet$ := Print$("%s-%02d", d$, i%+1);
	PrintLog("NewDataSet: dataset= " + dataDataSet$ + "\n");
	DlgValue$(dataDataSetTextItem%, "Data set name: " + dataDataSet$);
	return 1;
end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' Data parameters END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' Start here. 
'
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

DataParametersDialog%();

